CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:masks
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
UnmixColors:[module_num:5|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
    Stain count:3
    Select the input color image:masks
    Name the output image:cyan
    Stain:Custom
    Red absorbance:0.892823
    Green absorbance:0.318472
    Blue absorbance:0.318502
    Name the output image:yellow
    Stain:Custom
    Red absorbance:0.327796
    Green absorbance:0.327832
    Blue absorbance:0.886045
    Name the output image:gray
    Stain:Custom
    Red absorbance:0.577304
    Green absorbance:0.577269
    Blue absorbance:0.577478

ErodeImage:[module_num:6|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
    Select the input image:cyan
    Name the output image:ErodeCyan
    Structuring element:square,4

ErodeImage:[module_num:7|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
    Select the input image:yellow
    Name the output image:ErodeYellow
    Structuring element:square,4

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:ErodeCyan
    Name the primary objects to be identified:cyan
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:30
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:ErodeYellow
    Name the primary objects to be identified:yellow
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:30
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
CombineObjects:[module_num:10|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
    Select initial object set:cyan
    Select object set to combine:yellow
    Select how to handle overlapping objects:Preserve
    Name the combined object set:MaskedCells

ConvertObjectsToImage:[module_num:11|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
    Select the input objects:MaskedCells
    Name the output image:MaskCell
    Select the color format:Grayscale
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
DilateImage:[module_num:12|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
    Select the input image:MaskCell
    Name the output image:DilateImage
    Structuring element:disk,2

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:DilateImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:masks
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_masks
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
